CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "humb") (file doesnot contain "-BF_")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9]{1,2})_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Plate>.*)[\\/]
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "Illum")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Plate>.*)$
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "llum")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigER': u'Plate', u'OrigAGP': u'Plate', u'IllumMito': u'Plate', u'OrigRNA': u'Plate', u'IllumER': u'Plate', u'IllumRNA': u'Plate', u'IllumAGP': u'Plate', u'OrigMito': u'Plate', u'IllumDNA': u'Plate', u'OrigDNA': u'Plate'}, {u'OrigER': u'Well', u'OrigAGP': u'Well', u'IllumMito': None, u'OrigRNA': u'Well', u'IllumER': None, u'IllumRNA': None, u'IllumAGP': None, u'OrigMito': u'Well', u'IllumDNA': None, u'OrigDNA': u'Well'}, {u'OrigER': u'Site', u'OrigAGP': u'Site', u'IllumMito': None, u'OrigRNA': u'Site', u'IllumER': None, u'IllumRNA': None, u'IllumAGP': None, u'OrigMito': u'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w4")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w5")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumDNA")
    Name to assign these images:IllumDNA
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumER")
    Name to assign these images:IllumER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumRNA")
    Name to assign these images:IllumRNA
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumAGP")
    Name to assign these images:IllumAGP
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumMito")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Well
    Metadata category:Plate
    Metadata category:Site

CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide

MeasureImageQuality:[module_num:6|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:7|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:8|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBad
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder|Desktop\qc\2019_06_25_Batch3\rules
    Rules file name:QCRules_GoodBad.txt
    Class number:2

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,240
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:14
    Suppress local maxima that are closer than this minimum allowed distance:12
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1.0
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:AGP
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0004,0.04
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:12|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
    Hidden:5
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:Mito
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:13|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
    Image count:5
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:ER
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:AGP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:RNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:14|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
    Hidden:5
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:18|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:20|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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20
    Measure images or objects?:Both

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:25|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|Analysis
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:No
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    Experiment name:Kapoor_20X
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    Export object relationships?:No
    Overwrite without warning?:Data only
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:27|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
    Store batch files in default output folder?:No
    Output folder path:C:\Users\dstirlin\Downloads\Resist\Batch11
    Are the cluster computers running Windows?:No
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    Local root path:J:\2018_05_30_ResistanceMechanisms_Kapoor\2021_02_08_Batch11\illum
    Cluster root path:/home/ubuntu/bucket/projects/2018_05_30_ResistanceMechanisms_Kapoor/2021_02_08_Batch11/illum
    Local root path:J:\2018_05_30_ResistanceMechanisms_Kapoor\2021_02_08_Batch11\ImageXpress\20210205\219814\TimePoint_1
    Cluster root path:/home/ubuntu/bucket/projects/2018_05_30_ResistanceMechanisms_Kapoor/2021_02_08_Batch11/images/219814
    Local root path:c:\users\dstirlin
    Cluster root path:c:\users\dstirlin
